PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = $[-1.000,-1.000,-1.000]
  expName = Stylus_maze
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Routines
  Routine test
    ImageComponent cue
      image = stylus_maze_trial.jpg
      size = (1, 1)
      startVal [time (s)] = 0.5
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    ImageComponent dot
      image [set every repeat] = $cue_file
      pos [set every frame] = (target_x, target_y)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.5
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    KeyboardComponent response
      allowedKeys = 'up','down','left','right','return'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = first key
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if response.keys != corrAns:
            exptrials.finished = True
            print('Incorrect')
        #elif exptrials.thisTrialN == 26:
        #    outertrials.finished = True
        #    print('Correct and finished')
        elif 'return' in response.keys:
            outertrials.finished = True
            exptrials.finished = True
        else:
            print('Correct')
  Routine inst
    ImageComponent image
      image = stylus_maze_target.jpg
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 7.5
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  Routine feedback
    TextComponent thanktxt
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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      text:
        Congrats! You've successfully memorised the maze.

        Thank you for your time.
  Routine intro
    TextComponent introtxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You'll be shown a solved maze (stimulus) with a single correct path along with start (top left) and finish (bottom right) sites marked on it. You have to memorize the path and solve the empty maze (trial).

        Maze size = 10 x10
        Time duration for stimulus memorization = "8 s"
        Navigate the stylus (red dot) using arrow keys of your keyboard: "up, "down", "left", and "right"
        Press "return" key when you reach the finish point.*

        Each time you commit a mistake the stimulus is shown for "1 s" as a hint and your stylus is reset to its initial position. Your goal is to solve the maze keeping the amount of errors minimum.

        Press any key to start!
        If you feel like quiting press "escape" key.
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine hint
    ImageComponent image_2
      image = stylus_maze_target.jpg
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine intro
  Routine inst
  LoopInitiator outertrials loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 1000
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    LoopInitiator exptrials loopType="TrialHandler"
      conditionsFile = conditions.xlsx
      loopType = sequential
      nReps = 26
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      conditions:
        [OrderedDict([('cue_file', 'rdot.png'), ('target_x', -0.45), ('target_y', 0.45), ('corrAns', 'down'), ('is_valid', 'valid')]),
        OrderedDict([('cue_file', 'rdot.png'), ('target_x', -0.45), ('target_y', 0.35), ('corrAns', 'down'), ('is_valid', 'valid')]),
        OrderedDict([('cue_file', 'rdot.png'), ('target_x', -0.45), ('target_y', 0.25), ('corrAns', 'down'), ('is_valid', 'valid')]),
        OrderedDict([('cue_file', 'rdot.png'), ('target_x', -0.45), ('target_y', 0.15), ('corrAns', 'down'), ('is_valid', 'valid')]),
        OrderedDict([('cue_file', 'rdot.png'), ('target_x', -0.35), ('target_y', 0.15), ('corrAns', 'right'), ('is_valid', 'valid')]),
        OrderedDict([('cue_file', 'rdot.png'), ('target_x', 0.5), ('target_y', None), ('corrAns', None), ('is_valid', None)]),
        OrderedDict([('cue_file', 'rdot.png'), ('target_x', 0.5), ('target_y', None), ('corrAns', None), ('is_valid', None)]),
        OrderedDict([('cue_file', 'rdot.png'), ('target_x', 0.5), ('target_y', None), ('corrAns', None), ('is_valid', None)]),
        OrderedDict([('cue_file', 'rdot.png'), ('target_x', 0.5), ('target_y', None), ('corrAns', None), ('is_valid', None)]),
        OrderedDict([('cue_file', 'rdot.png'), ('target_x', -0.5), ('target_y', None), ('corrAns', None), ('is_valid', None)]),
        OrderedDict([('cue_file', 'rdot.png'), ('target_x', None), ('target_y', None), ('corrAns', None), ('is_valid', None)]),
        OrderedDict([('cue_file', 'rdot.png'), ('target_x', None), ('target_y', None), ('corrAns', None), ('is_valid', None)])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
      Routine test
    LoopTerminator exptrials
    Routine hint
  LoopTerminator outertrials
  Routine feedback
